OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Signal stream, Input stream 2=#0.Stimulations -> Identity => #1
#1.Output stream 1 -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP
  Equation = x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min
  Min crop value = -1
  Max crop value = 1
-> Simple DSP => #8
  Equation = x
Data=#8 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
